graphs:
    - id: player_1 # Recuperation du publisher (enregistrement ou de EEG) 
      nodes:
          - id: get_players
            module: timeflux.nodes.zmq
            class: Sub
            params:
                topics: [player_1]

########## Formatage de l'onde sous forme de matrice ########    \            
          - id: formate_wave_p1
            module: timeflux.nodes.query
            class: LocQuery
            params:
                key: [A1]
#############################################################    /

##################### Filters ############################     \
          - id: band_stop_p1               # Blocage des ondes dans un intervale [x, y]
            module: timeflux_dsp.nodes.filters
            class: IIRFilter
            params:
                frequencies: [47, 53] ## frequence eletrique en France 50hz (marge d'erreur) US=[55, 65]
                filter_type: bandstop
                order: 1              ## (order plus grand) = precision++ mais temps de traitement--

          - id: band_pass_p1
            module: timeflux_dsp.nodes.filters
            class: IIRFilter
            params:
                frequencies: [1, 45]
                filter_type: bandpass
                order: 3
##########################################################     /

################### Separation des ondes #################     \
          - id: split_p1
            module: timeflux_dsp.nodes.filters  ## renvoi une Dataframe avec les 5 ondes split
            class: FilterBank
            params:
                filters:
                    'delta': {frequencies: [1, 3], order: 3}
                    'theta': {frequencies: [4, 7], order: 3}
                    'alpha': {frequencies: [8, 13], order: 3}
                    'beta':  {frequencies: [14, 24], order: 3}
                    'gamma': {frequencies: [25, 45], order: 3}
          #          rate: 1000 # todo:  rather get from meta
            design: butter
##########################################################     /

################## Clacul ################################     \

##########################################################     /

################## Publisher #############################     \
          - id: pub_result_p1
            module: timeflux.nodes.zmq
            class: Pub
            params:
                topic: result_p1
##########################################################     /

################## Display et Debugg ######################     \
          - id: debugg_term
            module: timeflux.nodes.debug
            class: Display

          - id: debugg_ui
            module: timeflux_ui.nodes.ui
            class: UI
###########################################################     /

      edges:
   #################### player 1
          - source: get_players:player_1
            target: formate_wave_p1
            
          - source: formate_wave_p1
            target: band_stop_p1
          - source: band_stop_p1
            target: band_pass_p1
          - source: band_pass_p1
            target: split_p1
          - source: split_p1
            target: debugg_ui:p1
          - source: split_p1
            target: debugg_term

      rate: 5
